PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = delay_discounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or " + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/conditions_6.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 1, 'future_reward': 5, 'delay': 9},
      {'reward_today': 2, 'future_reward': 6, 'delay': 18},
      {'reward_today': 3, 'future_reward': 8, 'delay': 27},
      {'reward_today': 4, 'future_reward': 9, 'delay': 36},
      {'reward_today': 5, 'future_reward': 7, 'delay': 45},
      {'reward_today': 6, 'future_reward': 10, 'delay': 54},
      {'reward_today': 7, 'future_reward': 11, 'delay': 63},
      {'reward_today': 8, 'future_reward': 12, 'delay': 72},
      {'reward_today': 9, 'future_reward': 13, 'delay': 81},
      {'reward_today': 10, 'future_reward': 14, 'delay': 8},
      {'reward_today': 12, 'future_reward': 15, 'delay': 16},
      {'reward_today': 13, 'future_reward': 16, 'delay': 24},
      {'reward_today': 14, 'future_reward': 17, 'delay': 32},
      {'reward_today': 16, 'future_reward': 18, 'delay': 40},
      {'reward_today': 17, 'future_reward': 19, 'delay': 48},
      {'reward_today': 18, 'future_reward': 20, 'delay': 56},
      {'reward_today': 19, 'future_reward': 21, 'delay': 64},
      {'reward_today': 20, 'future_reward': 22, 'delay': 72},
      {'reward_today': 21, 'future_reward': 23, 'delay': 80},
      {'reward_today': 22, 'future_reward': 24, 'delay': 88},
      {'reward_today': 23, 'future_reward': 25, 'delay': 96}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
    Routine trial
  LoopTerminator trials
